OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.3.0)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "!Channel 64" => #1
  Channel List = Channel 64
  Action = Reject
  Channel Matching Method = Smart
Data=#1 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#1 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 45
  Pass band ripple (dB) = 0.500000
-> ica2 => #4
  Clock frequency (Hz) = 64
  Script = C:/Users/Zeno/Downloads/ica_for_demo/ICA_Demo.txt
  Component_num = 3
  Store_Path = C:/Users/Zeno/Downloads/ica_for_demo/matrix_1
-> Reference Channel
  Channel = Channel 23
  Channel Matching Method = Smart
-> 0xc67a01dc Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 45
  Pass band ripple (dB) = 0.500000
-> Time based epoching => #7
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Channel Selector "Channel 3;Channel 29"
  Channel List = Channel 3;Channel 29
  Action = Select
  Channel Matching Method = Smart
-> Spectral analysis (FFT) => #9
  Spectral components = Amplitude
#9.Amplitude -> Frequency Band Selector
  Frequencies to select = 1:45
-> Spectrum Average => #11
  Considers zeros = false
#9.Amplitude -> Frequency Band Selector
  Frequencies to select = 8:12
-> Spectrum Average => #13
  Considers zeros = false
New input=#13, New input2=#11 -> Python scripting
  Clock frequency (Hz) = 64
  Script = C:/Users/Zeno/Downloads/ica_for_demo/streamedmatrix.py
#9.Amplitude -> Power spectrum display
  Minimum frequency to display = 1
  Maximum frequency to display = 45
#7 -> Simple DSP
  Equation = x*x
-> Signal average
-> Epoch average => #18
  Averaging type = Moving epoch average
  Epoch count = 4
Data=#4 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Streamed matrix=#0.Signal stream, Input stimulation channel=#0.Stimulations -> Brainamp file writer
  Header filename = C:/Users/Zeno/Downloads/ica_for_demo/demo.vhdr
  Binary format = IEEE_FLOAT_32
Electrode localisation file reader => #21
  Filename = C:/Users/Zeno/Downloads/ica_for_demo/electrode_set_standard_cartesian_new.txt
Signal=#18, Channel localization=#21 -> 2D topographic map
  Interpolation type = Spline (potentials)
  Delay (in s) = 0.000000
Signal=#18, Channel localisation=#21 -> 3D topographic map
  Interpolation type = 1
  Delay (in s) = 0
  Face mesh filename = face
  Scalp mesh filename = scalp
  Sphere projection mesh filename = projection_center

0xc73e83ec Sinus generator => #24
  Clock frequency (Hz) = 16
  Script = C:/Users/Zeno/Downloads/apply_weight/dif.py
  Channel count = 1
  Sampling frequency = 256
  Generated epoch sample count = 32
-> 0xc73e83ec Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.5
0xc73e83ec Sinus generator => #26
  Clock frequency (Hz) = 16
  Script = C:/Users/Zeno/Downloads/apply_weight/sum.py
  Channel count = 1
  Sampling frequency = 256
  Generated epoch sample count = 32
Input 1=#24, Input 2=#26 -> 0xc73e83ec Signal Merger => #27
Data=#27 -> 0xc73e83ec Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false

Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false

Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
