OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.3.0)

Brainamp file reader => #0
  Filename (header) = C:/Users/Zeno/Downloads/ica_for_demo/walkingbaseline.vhdr
  Epoch size (in sec) = 1/128
  Convert stimuli to OpenViBE labels = true
#0.EEG stream -> Channel Selector "!Aux1;Aux2;Aux3;Aux4;Aux5;Aux6;Aux7;Aux8;Ch64" => #1
  Channel List = Aux1;Aux2;Aux3;Aux4;Aux5;Aux6;Aux7;Aux8;Ch64
  Action = Reject
  Channel Matching Method = Smart
Data=#1 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#1 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 45
  Pass band ripple (dB) = 0.500000
-> ica2 => #4
  Clock frequency (Hz) = 64
  Script = C:/Users/Zeno/Downloads/ica_for_demo/ICA_Demo.txt
  Component_num = 3
  Store_Path = C:/Users/Zeno/Downloads/ica_for_demo/matrix
-> Reference Channel
  Channel = Ch23
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 45
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Epoch average => #10
  Averaging type = Moving epoch average
  Epoch count = 4
Data=#4 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Electrode localisation file reader => #12
  Filename = C:/Users/Zeno/Downloads/ica_for_demo/electrode_set_standard_cartesian_new.txt
Signal=#10, Channel localization=#12 -> 2D topographic map
  Interpolation type = Spline (potentials)
  Delay (in s) = 0.000000
Signal=#10, Channel localisation=#12 -> 3D topographic map
  Interpolation type = 1
  Delay (in s) = 0
  Face mesh filename = face
  Scalp mesh filename = scalp
  Sphere projection mesh filename = projection_center

0xc73e83ec Sinus generator => #15
  Clock frequency (Hz) = 16
  Script = C:/Users/Zeno/Downloads/apply_weight/dif.py
  Channel count = 1
  Sampling frequency = 256
  Generated epoch sample count = 32
-> 0xc73e83ec Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.5
-> 0xc73e83ec Spectral analysis (FFT) => #17
  Spectral components = Amplitude
#17.Amplitude -> 0xc73e83ec Frequency Band Selector
  Frequencies to select = 8:12;16:24
-> 0xc73e83ec Spectrum Average
  Considers zeros = false
-> 0xc73e83ec Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#17.Amplitude -> 0xc73e83ec Power spectrum display
  Minimum frequency to display = 8
  Maximum frequency to display = 12
0xc73e83ec Sinus generator => #22
  Clock frequency (Hz) = 16
  Script = C:/Users/Zeno/Downloads/apply_weight/sum.py
  Channel count = 1
  Sampling frequency = 256
  Generated epoch sample count = 32
Input 1=#15, Input 2=#22 -> 0xc73e83ec Signal Merger => #23
Data=#23 -> 0xc73e83ec Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
